// 
begintime = startsw()

load_file("d21-cortex.hoc")
load_file("wiring_proc_d21.hoc")
load_file("noise_d21.hoc") 
UnoiseV(-0.3,0.3)
UnoiseII(-0.3,0.3)
UnoiseIPL5(-0.3,0.3)
UnoiseIPL2(-0.3,0.3)
strdef FN

// ****************Load wiring configuration file here:
load_file("wiring-config_suprathresh_d21.hoc")
// ****************Output file name here:
FN="reduced.dat"

//Total time for one run
tstop=175
// time increment
dt=0.025
// Number of runs
NRUN = 1 //100
///////////////////////////////////////////////////////////////////////////////////////////////
// Setup the NetStims (defined in sj3-cortex.hoc) // WHY BOTH HERE AND AT THE END OF SJ3-CORTEX?
NetStimG[0].MeanInterval = 1
NetStimG[0].SD = 0.5
NetStimG[0].MeanStart = 25
NetStimG[0].StartSD = 2.5
NetStimG[0].number = 1
NetStimG[0].noise = 1
NetStimG[0].interval = 0

// Setup the NetStims
NetStimG[1].MeanInterval = 1
NetStimG[1].SD = 1
NetStimG[1].MeanStart = 70 // 70
NetStimG[1].StartSD = 6
NetStimG[1].number = 1
NetStimG[1].noise = 1
NetStimG[1].interval = 0
//// Setup the NetStims
NetStimG[2].MeanInterval = 1
NetStimG[2].SD = 1
NetStimG[2].MeanStart = 135 // 135
NetStimG[2].StartSD = 7
NetStimG[2].number = 1
NetStimG[2].noise = 1
NetStimG[2].interval = 0
//

////
proc runonce(){
finitialize(-65)
fcurrent()

while (t<tstop){
          fadvance()
// below put a '%f' for every data type defined
          fprint( "%f %f %f %f %f %f %f %f %f %f %f %f \n", \
 t, \
 L2_dipole(), \
 L5_dipole(), \
 dL2+dL5, \
dset(PL2[0].all), \
dset(PL2[0].apical), \
 dset(PL2[0].basal), \
 dset(PL5[0].all), \
 dset(PL5[0].apical), \
 dset(PL5[0].basal), \
 PL2[0].soma.v(0.5), \
 PL5[0].soma.v(0.5) )
}
} //end runonce()


proc runit(){ local i
wopen(FN) //for i=0, NRUN-1{ runonce() print(i)}
for i=0, NRUN-1{runonce() printf("Run %d of %d \n",i+1,NRUN)}
wopen()
}

runit()

finishtime = startsw() - begintime
printf("finishtime = %g\n", finishtime)